<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:ui="clr-namespace:Bonsai.Design;assembly=Bonsai.Design"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>CameraTracking</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="vid:VideoCaptureDevice">
                <vid:Index>0</vid:Index>
                <vid:CaptureProperties />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Flip">
                <cv:Mode>Vertical</cv:Mode>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Image</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:ConvertColor">
                <cv:Conversion>Bgr2Hsv</cv:Conversion>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:HsvThreshold">
                <cv:Lower>
                  <cv:Val0>0</cv:Val0>
                  <cv:Val1>157</cv:Val1>
                  <cv:Val2>79</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:Lower>
                <cv:Upper>
                  <cv:Val0>109</cv:Val0>
                  <cv:Val1>255</cv:Val1>
                  <cv:Val2>255</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:MorphologicalOperator">
                <cv:Size>
                  <cv:Width>5</cv:Width>
                  <cv:Height>5</cv:Height>
                </cv:Size>
                <cv:Anchor>
                  <cv:X>-3</cv:X>
                  <cv:Y>-3</cv:Y>
                </cv:Anchor>
                <cv:Shape>Rectangle</cv:Shape>
                <cv:Iterations>10</cv:Iterations>
                <cv:Operation>Close</cv:Operation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>External</cv:Mode>
                <cv:Method>ChainApproxNone</cv:Method>
                <cv:Offset>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Offset>
                <cv:MinArea xsi:nil="true" />
                <cv:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Centroid" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Position</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ArduinoResources</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:CreateArduino">
                <ard:Name>PanTilt</ard:Name>
                <ard:PortName>COM5</ard:PortName>
                <ard:BaudRate>57600</ard:BaudRate>
                <ard:SamplingInterval>10</ard:SamplingInterval>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Arduino</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0.5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="DoubleProperty">
                <Value>180</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>PanAngle</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0.97282608695652173</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="DoubleProperty">
                <Value>180</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TiltAngle</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>_TiltAngle</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TiltAngle</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:ServoOutput">
                <ard:PortName>PanTilt</ard:PortName>
                <ard:Pin>4</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Arduino</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PanAngle</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:ServoOutput">
                <ard:PortName>PanTilt</ard:PortName>
                <ard:Pin>5</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Arduino</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="16" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>PanTiltUpdate</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Position</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>X</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Image</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Max" Selector="Width" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Rescale">
                <dsp:Min>0</dsp:Min>
                <dsp:Max>640</dsp:Max>
                <dsp:RangeMin>-1</dsp:RangeMin>
                <dsp:RangeMax>1</dsp:RangeMax>
                <dsp:RescaleType>Clamp</dsp:RescaleType>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PanAngle</Name>
            </Expression>
            <Expression xsi:type="rx:Scan">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(
Accumulation + Value as NewValue,
Accumulation as OldValue)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Max" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>160</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Min" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>20</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(Item1.NewValue as NewValue,
Item1.OldValue as OldValue,Item2.Item1 as MaxValue,Item2.Item2 as MinValue)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>MinValue &lt; NewValue &amp;&amp; NewValue &lt; MaxValue ? NewValue : OldValue</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="7" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="6" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>PanAngle</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Position</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Y</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Image</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Max" Selector="Height" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Rescale">
                <dsp:Min>0</dsp:Min>
                <dsp:Max>360</dsp:Max>
                <dsp:RangeMin>-0.5</dsp:RangeMin>
                <dsp:RangeMax>0.5</dsp:RangeMax>
                <dsp:RescaleType>Clamp</dsp:RescaleType>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TiltAngle</Name>
            </Expression>
            <Expression xsi:type="rx:Scan">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(
Accumulation + Value as NewValue,
Accumulation as OldValue)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Max" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>180</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Min" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(Item1.NewValue as NewValue,
Item1.OldValue as OldValue,Item2.Item1 as MaxValue,Item2.Item2 as MinValue)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>MinValue &lt; NewValue &amp;&amp; NewValue &lt; MaxValue ? NewValue : OldValue</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="7" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="6" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TiltAngle</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="12" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Position</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="SubscribeSubject">
        <Name>Image</Name>
      </Expression>
      <Expression xsi:type="ui:VisualizerWindow">
        <ui:Visible>true</ui:Visible>
        <ui:Location xsi:nil="true" />
        <ui:Size xsi:nil="true" />
        <ui:WindowState xsi:nil="true" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>