<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.Yolo;assembly=Bonsai.Yolo"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:ui="clr-namespace:Bonsai.Design;assembly=Bonsai.Design"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>ImageProcessing</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:CameraCapture">
                <cv:Index>2</cv:Index>
                <cv:CaptureProperties />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Flip">
                <cv:Mode>Vertical</cv:Mode>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Image</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:YoloDetect">
                <p1:ModelPath>models\yolo26n.onnx</p1:ModelPath>
                <p1:ExecutionProvider>Cpu</p1:ExecutionProvider>
                <p1:DeviceId>0</p1:DeviceId>
                <p1:ConfidenceThreshold>0.5</p1:ConfidenceThreshold>
                <p1:IouThreshold>0.5</p1:IouThreshold>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>ObjectDetections</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ObjectDetections</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>ObjectClass</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="p1:ObjectClass">
                      <Value>CellPhone</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>BoundingBox</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(it.X + it.Width / 2 as X, it.Y + it.Height / 2 as Y)</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Position</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ArduinoResources</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" Category="Arduino" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:CreateArduino">
                <ard:Name>PanTilt</ard:Name>
                <ard:PortName>COM5</ard:PortName>
                <ard:BaudRate>57600</ard:BaudRate>
                <ard:SamplingInterval>10</ard:SamplingInterval>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Arduino</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="PanAngle" Category="ServoControl" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0.15760869565217392</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="DoubleProperty">
                <Value>180</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>PanAngle</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="TiltAngle" Category="ServoControl" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="DoubleProperty">
                <Value>180</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TiltAngle</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TiltAngle</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:ServoOutput">
                <ard:PortName>PanTilt</ard:PortName>
                <ard:Pin>4</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Arduino</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PanAngle</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:ServoOutput">
                <ard:PortName>PanTilt</ard:PortName>
                <ard:Pin>5</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Arduino</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="18" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>PanTiltUpdate</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Position</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>X</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Image</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Max" Selector="Width" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Rescale">
                <dsp:Min>0</dsp:Min>
                <dsp:Max>640</dsp:Max>
                <dsp:RangeMin>-3</dsp:RangeMin>
                <dsp:RangeMax>3</dsp:RangeMax>
                <dsp:RescaleType>Clamp</dsp:RescaleType>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PanAngle</Name>
            </Expression>
            <Expression xsi:type="rx:Scan">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(
Accumulation + Value as NewValue,
Accumulation as OldValue)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Max" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>160</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Min" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>20</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(Item1.NewValue as NewValue,
Item1.OldValue as OldValue,Item2.Item1 as MaxValue,Item2.Item2 as MinValue)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>MinValue &lt; NewValue &amp;&amp; NewValue &lt; MaxValue ? NewValue : OldValue</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="7" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="6" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>PanAngle</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Position</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Y</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Image</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Max" Selector="Height" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Rescale">
                <dsp:Min>0</dsp:Min>
                <dsp:Max>360</dsp:Max>
                <dsp:RangeMin>-3</dsp:RangeMin>
                <dsp:RangeMax>3</dsp:RangeMax>
                <dsp:RescaleType>Clamp</dsp:RescaleType>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TiltAngle</Name>
            </Expression>
            <Expression xsi:type="rx:Scan">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(
Accumulation + Value as NewValue,
Accumulation as OldValue)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Max" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>180</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Min" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>120</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(Item1.NewValue as NewValue,
Item1.OldValue as OldValue,Item2.Item1 as MaxValue,Item2.Item2 as MinValue)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>MinValue &lt; NewValue &amp;&amp; NewValue &lt; MaxValue ? NewValue : OldValue</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="7" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="6" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TiltAngle</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="12" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ObjectDetections</Name>
      </Expression>
      <Expression xsi:type="ui:VisualizerWindow">
        <ui:Text>ObjectDetections</ui:Text>
        <ui:Visible>true</ui:Visible>
        <ui:Location xsi:nil="true" />
        <ui:Size xsi:nil="true" />
        <ui:WindowState xsi:nil="true" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="3" To="4" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>